<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p2="clr-namespace:AindIsoForceDataSchema.TaskLogic;assembly=Extensions"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>CreateTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>thisTrial</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\CreateSoftwareEventInline.bonsai">
              <EventName>TrialNumberInBlock</EventName>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>TrialNumber++</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNumber</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialNumber</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>thisTrial</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>QuiescentPeriod</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisTrial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>QuiescencePeriod</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\CreateSoftwareEventInline.bonsai">
                    <EventName>QuiescentPeriod</EventName>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>thisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentForce</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ForceThreshold</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Threshold" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ThresholdJoystick" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.IsAny</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Trigger</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentForce</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Seconds</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Trigger</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.Seconds</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="Subtract" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Duration</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>ClampTo0</scr:Name>
                          <scr:Expression>it &gt; 0 ? it : 0</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Trigger</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.Item1</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="7" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="14" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="17" Label="Source1" />
                        <Edge From="16" To="17" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Switch" />
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="rx:Condition">
                    <Name>IsBelow</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="8" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ResponsePeriod</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisTrial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ResponsePeriod</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\CreateSoftwareEventInline.bonsai">
                    <EventName>ResponsePeriod</EventName>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>thisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>WaitForCrossing</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentForce</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>ForceThreshold</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Threshold" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:ThresholdJoystick" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>IsAny</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value.IsAny</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\CreateSoftwareEventInline.bonsai">
                          <EventName>CrossingOnset</EventName>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="4" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>WaitForRelease</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>TriggerSample</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentForce</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>ForceThreshold</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Threshold" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:ThresholdJoystick" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>WaitForOffset</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TriggerSample</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value.TriggeredAction</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Value" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Index">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Action">
                                  <Value>None</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="5" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source2" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\CreateSoftwareEventInline.bonsai">
                          <EventName>CrossingOffset</EventName>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="7" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>LabelPresses</scr:Name>
                    <scr:Expression>new(Item1 as Start, Item2 as End)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>ProcessCrossing</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Crossings</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Crossings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Start,End</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:ProcessCrossingOutcome" />
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ProcessedCrossing</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ProcessedCrossing</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ProcessedCrossing</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Duration</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>ForceDuration</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ProcessedCrossing</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Action</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RewardedAction</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="Equal" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>Label</scr:Name>
                          <scr:Expression>new(
Item1 as Crossing,
Item2 as IsValidDuration,
Item3 as IsRewardedAction)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\CreateSoftwareEventInline.bonsai">
                          <EventName>ProcessedCrossing</EventName>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="23" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="14" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="23" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="20" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source2" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source3" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="27" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsValid</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>IsRewardedAction</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>IsValidDuration</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="BitwiseAnd" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Reward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisTrial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RewardPeriod</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\CreateSoftwareEventInline.bonsai">
                    <EventName>RewardPeriod</EventName>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>thisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="p2:MatchRewardPeriod">
                    <p2:Type xsi:type="TypeMapping" TypeArguments="p2:OperantReward" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>OperantReward</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>thisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TimeToCollect</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:TimeSpanFromSeconds" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LickEvent</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\CreateSoftwareEventInline.bonsai">
                          <EventName>OperantRewardOutcome</EventName>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>Delay</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>Outcome</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Outcome</Name>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="rx:SelectMany">
                                <Name>Delay</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>thisPeriod</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Delay</Selector>
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
                                    <Expression xsi:type="scr:ExpressionTransform">
                                      <scr:Name>ClampTo0</scr:Name>
                                      <scr:Expression>it &gt; 0 ? it : 0</scr:Expression>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p3:TimeSpanFromSeconds" />
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="DueTime" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Timer">
                                        <rx:DueTime>PT0S</rx:DueTime>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="7" To="8" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>true</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Outcome</Name>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>thisPeriod</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Amount</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="10" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source2" />
                              <Edge From="10" To="13" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source2" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="12" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="p2:MatchRewardPeriod">
                    <p2:Type xsi:type="TypeMapping" TypeArguments="p2:Reward" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>PavlovianReward</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>thisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Delay</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>ClampTo0</scr:Name>
                          <scr:Expression>it &gt; 0 ? it : 0</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:TimeSpanFromSeconds" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.Amount</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="12" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>GiveReward</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>GiveReward</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="10" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsNotValid</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>IsRewardedAction</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>IsValidDuration</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="BitwiseAnd" />
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ITI</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisTrial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>InterTrialInterval</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\CreateSoftwareEventInline.bonsai">
                    <EventName>InterTrialInterval</EventName>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>thisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it &gt; 0 ? it : 0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:TimeSpanFromSeconds" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="13" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>